PsychoPy2experiment version="2023.2.3"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'], expInfo['session'])
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Use version = 2021.1.4
  Window size (pixels) = [1600, 900]
  color = $[1,1,1]
  expName = SEMT
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine instr
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    CodeComponent code_instr
      Code Type = Py
      Begin Routine:
        # Find a font that is available on the system.
        #fm = visual.textbox2.getFontManager()
        #available_font_names=fm.getFontFamilyStyles()
        #print(available_font_names)

        #Change displayed text based on the language previously chosen
        if english == True:
            instr_text_1.text = "Welcome to the experiment!\n\nYour task will be to memorize different pairs of pictures representing objects you encounter in your daily life.\n\nThe first object of each pair will be presented with an open bracket on the left, while the second object will be presented with an open bracket on the right.\n\nIMPORTANT: YOU HAVE TO MEMORIZE BOTH OBJECTS TOGETHER!\n\nPress 1 or 2 to continue."
            instr_text_2.text = "Between the presentation of the paired objects, a question will appear.\n\nIf question is 'Bigger?' :\n\nPress '1' if the first object in the pair is bigger than the second object in the pair in real life.\n\nPress '2' if the second object in the pair is the bigger one.\n\nPress 1 or 2 to continue."
            instr_text_3.text = "If the question is 'Same category?' :\n\nPress '1' if both objects are from the same semantic category (ex: both objects are clothes, or both objects are food...)\n\nPress '2' if they are from different categories (ex: one clothing and one food item).\n\nPress 1 or 2 to continue."
            instr_text_4.text = "Please answer when the second object appears.\n\nBetween each pair of objects, there will be a fixation cross (+). You should look at this cross while there are no images on the screen.\n\nPress 1 or 2 to continue."
            instr_text_5.text = "Let's practice a bit before we begin.\n\nAre you ready?\n\nPress 1 or 2 to start the practice."
        else:
            instr_text_1.text = "Bienvenue à l'expérience !\n\nVous devrez mémoriser des paires d'images représentant des objets de la vie quotidienne.\n\nLe premier objet de chaque paire sera présenté avec un crochet à sa gauche et le second objet sera présenté avec un crochet à sa droite.\n\nIMPORTANT: VOUS DEVEZ MÉMORISER LES DEUX OBJETS DE LA PAIRE ENSEMBLE!!\n\nAppuyez sur 1 ou 2 pour continuer."
            instr_text_2.text = "Entre les deux présentations d'objets, une question apparaîtra à l'écran.\n\nSi la question est 'Plus gros?' :\n\nAppuyez sur '1' si dans la vie de tous les jours le premier objet de la paire est plus gros que le deuxième objet.\n\nAppuyez sur '2' si le deuxième objet de la paire est le plus gros.\n\nAppuyez sur 1 ou 2 pour continuer."
            instr_text_3.text = "Si la question est 'Catégorie?' :\n\nAppuyez sur '1' si les deux objets font partie de la même catégorie sémantique (ex: les deux objets sont des vêtements, ou les deux sont de la nourriture...).\n\nAppuyez sur '2' s'ils font partie de deux différentes catégories (ex: un morceau de vêtement et une image de nourriture).\n\nAppuyez sur le bouton 1 ou 2 pour continuer."
            instr_text_4.text = "Vous devez répondre quand le DEUXIÈME OBJET apparaît.\n\nEntre chaque paire d'objets, il y aura une croix de fixation (+). Vous devez regarder cette croix lorsqu'il n'y a pas d'image à l'écran.\n\nAppuyez sur le bouton 1 ou 2 pour continuer."
            instr_text_5.text = "Commençons la pratique avec quelques essais.\n\nÊtes-vous prêt ?\n\nAppuyez sur 1 ou 2 pour commencer la pratique."

        #Display 4 instructions
        curIns = 1

        # The button was previously pressed
        button_down = True
      Each Frame:
        # Check if we pressed keyboard keys
        keys = event.getKeys()
        #print(keys)

        # Reset buttons if they are not pressed
        if button_down  and not joystick_instr.getAllButtons()[1] and not joystick_instr.getAllButtons()[2] and not '1' in keys and not '2' in keys:
           button_down = False

        # Go to next instruction if '1' or '2' is pressed
        if not button_down and curIns >= 1 and curIns <= 4 and (joystick_instr.getAllButtons()[1] or joystick_instr.getAllButtons()[2] or '1' in keys or '2' in keys):
            button_down = True
            curIns = curIns + 1

        # Go to next routine
        elif not button_down and curIns == 5 and (joystick_instr.getAllButtons()[1] or joystick_instr.getAllButtons()[2] or '1' in keys or '2' in keys):
            button_down = True
            continueRoutine = False

        print("current instruction: ", curIns)
      End Routine:
        instr_text_1.setOpacity(0)
        instr_text_2.setOpacity(0)
        instr_text_3.setOpacity(0)
        instr_text_4.setOpacity(0)
        instr_text_5.setOpacity(0)
    TextComponent instr_text_1
      color = $[-1,-1,-1]
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [condition] = $curIns == 2
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    TextComponent instr_text_2
      color = $[-1,-1,-1]
      letterHeight = 0.04
      startVal [condition] = $curIns == 2
      stopVal [condition] = $curIns == 3
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    TextComponent instr_text_3
      color = $[-1,-1,-1]
      letterHeight = 0.04
      startVal [condition] = $curIns == 3
      stopVal [condition] = $curIns == 4
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      text:
        Any text

        including line breaks
    TextComponent instr_text_4
      color = $[-1,-1,-1]
      letterHeight = 0.04
      startVal [condition] = $curIns == 4
      stopVal [condition] = $curIns == 5
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      text:
        Any text

        including line breaks
    TextComponent instr_text_5
      color = $[-1,-1,-1]
      letterHeight = 0.04
      startVal [condition] = curIns == 5
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      text:
        Any text

        including line breaks
    JoystickComponent joystick_instr
      allowedButtons = 1, 2
      deviceNumber = 0
      forceEndRoutineOnPress = never
      saveJoystickState = never
      startVal [time (s)] = 0.0
      timeRelativeTo = joystick onset
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  Routine lang
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    CodeComponent code_lang
      Code Type = Py
      Begin Experiment:
        import re, time
        from datetime import datetime

        # Save starting session time
        startingTime = datetime.now().strftime("%H:%M:%S.%f")
        startingTime = "\'"+startingTime
        print("Starting time: ", startingTime)
        #startingTime = datetime.utcnow().strftime("%H:%M:%S.%f")[:-3]
        thisExp.addData("SessionTime", startingTime)
        thisExp.addData("SessionTime.RTTime", core.Clock().getTime())

        # Remove illegal characters in participants' name to avoid errors in filenames
        expInfo['participant']= re.sub('[^A-Za-z0-9]+', '', expInfo['participant'])

        # No buttons is currently pressed
        button_down = False
      Begin Routine:
        # Joystick's button is not pressed by default
        button_down = False
      Each Frame:
        #Perform actions depending to the pressed button/key
        #Set french or english variable to true when the language is selected

        if joystick_lang.getAllButtons()[1] or "1" in key_lang.keys:
                french = True
                english = False
                pracConditions = "SEMT_conditions_prac.csv"
                trialConditions = "SEMT_conditions_trials_bloc1.csv"
                text_lang.finished = True
                continueRoutine = False
        elif joystick_lang.getAllButtons()[2] or "2" in key_lang.keys:
                french = False
                english = True
                pracConditions = "SEMT_conditions_prac.csv"
                trialConditions = "SEMT_conditions_trials_bloc1.csv"
                text_lang.finished = True
                continueRoutine = False
      End Routine:
        lang = 'en' if english==True else 'fr'
        thisExp.addData('language', lang)
        button_down = True
    TextComponent text_lang
      color = $[-1,-1,-1]
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Veuillez sélectionner votre langue.
        Appuyez sur 1 pour Français.

        Please select your language.
        Press 2 for English.
    JoystickComponent joystick_lang
      allowedButtons = 0, 1
      deviceNumber = 0
      forceEndRoutineOnPress = never
      saveJoystickState = final
      startVal [time (s)] = 0.0
      timeRelativeTo = joystick onset
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    KeyboardComponent key_lang
      allowedKeys = '1', '2', 'esc'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instr2
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    CodeComponent code_instr2
      Code Type = Both
      Begin Routine:
        #Create a new joystick
        from psychopy.hardware import joystick
        joy = joystick.Joystick(0)
        bttnPress = joy

        #Change displayed text based on the language previously chosen
        if english == True:
            instr_text_1.text = "Welcome to the experiment!\n\nYour task will be to memorize different pairs of pictures representing objects you encounter in your daily life.\n\nThe first object of each pair will be presented with an open bracket on the left, while the second object will be presented with an open bracket on the right.\n\nIMPORTANT: YOU HAVE TO MEMORIZE BOTH OBJECTS TOGETHER!!\n\nPress any button to continue"
        else:
            instr_text_1.text = "Bienvenue à l'expérience\n\nVotre tâche consistera à mémoriser différentes paires d'images représentant des objets que vous rencontrez dans votre vie quotidienne.\n\nLe premier objet de chaque paire sera présenté avec un crochet ouvert à gauche, tandis que le second objet sera présenté avec un crochet ouvert à droite.\n\nIMPORTANT : VOUS DEVEZ MÉMORISER LES DEUX OBJETS ENSEMBLE !\n\nAppuyez sur n'importe quel boutton pour continuer"
      Each Frame:
        #Reset buttons if they are not pressed

        if button_down and not bttnPress.getButton(1) and not bttnPress.getButton(2):
            button_down = False

        #Function that will display next instruction or go to next routine
        if not button_down  and (bttnPress.getButton(1) or bttnPress.getButton(2)):
            instr_text_2.text = "sds"
            button_down = True
            continueRoutine = False
    TextComponent instr_text2
      color = $[-1,-1,-1]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
  Routine prac
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    CodeComponent code_pr
      Code Type = Py
      Begin Experiment:
        # Store frame rate of the monitor so we can time our stimuli more precisely
        #expInfo['frameRate'] = win.getActualFrameRate()
        #frameRate = round(expInfo['frameRate'])
      Begin Routine:
        # Change displayed text based on the language previously chosen
        if english == True:
            que_text_pr.text = question_english
        else:
            que_text_pr.text = question_french

        # Save the answer of the participant
        # The response period started when image 2 started. No need to save it.
        response_time_pr = -1. # Save when the participant answered (in secs)

        # set the images by parameters of condition file
        img1 = pic1
        img2 = pic2

        # Set the duration of the fixation cross and the question
        timeQue = duration_question/1000 #duration of the question
        timeFix = duration_fixation/1000 #duration of the fixation cross

        # Duration of the items, question and fixation cross with frames
        # The number of frames we want to display is equal to
        # the product of frame-rate and the number of seconds to display
        # the stimulus.
        # n_frames = frame_rate * n_seconds
        # n_frames_img1 = frameRate * 2.
        # n_frames_img2 = frameRate * 2.
        # debug.text = "duration of img 1 in frames: "+str(n_frames_img1)

        n_secs_img1 = 2.
        n_secs_img2 = 2.

        #By default the elements did not start so they are not finished
        item1_finished = False
        que_finished = False
        item2_finished = False

        # Record if the participant answered
        participant_answered = False

        # When true, we reached the end of img2 without any answer
        no_answers = False

        # Reset the response of the participant
        response_pr.text = ""
      Each Frame:
        #Set the boolean to true when item1 is done
        if item1_img_pr.status == FINISHED:
            item1_finished = True

        # Set the boolean to true when the question is done
        if que_text_pr.status == FINISHED and not que_finished:
            que_finished = True

        # Register participant's answers
        # Button 1 is pressed
        if not participant_answered and que_finished and (joystick_prac.getAllButtons()[1] or "1" in key_prac.keys):
            response_pr.text = 1
            participant_answered = True
            #win.color = 'grey'
            print("participant chose: ", response_pr.text)

        # Register participant's answers
        # Button 2 is pressed
        elif not participant_answered and que_finished and (joystick_prac.getAllButtons()[2] or "2" in key_prac.keys):
            response_pr.text = 2
            participant_answered = True
            print("participant chose: ", response_pr.text)

        # Register participant's answers
        #4s countdown are done
        elif not no_answers and not participant_answered and timer_pr.status == FINISHED:
            response_pr.finished = True
            no_answers = True
            print("participant did not answer: ", response_pr.text)

        #Set the boolean to true when the item2 is done
        if item2_img_pr.status == FINISHED:
            item2_finished = True

        #Go to next routine when fixation cross is done
        if fix_text_pr.status == FINISHED:
            continueRoutine = False
      End Routine:
        # Save variables for correlation with ePrime previous logfiles

        # Add the answer of the participant
        thisExp.addData('im2prat.RESP', response_pr.text)
        # Add the correct answer
        thisExp.addData('im2prat.CRESP', cans)
        # See if that matches with the correct answer
        if response_pr.text == str(cans):
            thisExp.addData('im2prat.ACC', 1)
        elif response_pr.text == '1' or response_pr.text == '2':
            thisExp.addData('im2prat.ACC', 0)
        else:
            thisExp.addData('im2prat.ACC', '')
        if response_pr.tStop!=None:
            thisExp.addData('im2prat.RT', abs(response_pr.tStop - response_pr.tStart))
        else:
            thisExp.addData('im2prat.RT', '')

        # Save answer rttime since the beginning of the experiment
        thisExp.addData('im2prat.RTTime', response_pr.tStopRefresh)
        #win.color = 'white'
    ImageComponent item1_img_pr
      image [set every repeat] = $img1
      interpolate = nearest
      size = None
      startVal [time (s)] = 0
      stopVal [duration (s)] = $n_secs_img1
      texture resolution = 512
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    ImageComponent brL_img_pr
      image = left_cr.jpg
      interpolate = nearest
      pos = (-0.6, 0)
      size = (0.1, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $n_secs_img1
      texture resolution = 512
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    TextComponent que_text_pr
      color = $[-1,-1,-1]
      letterHeight = 0.06
      startVal [condition] = $item1_finished == True
      stopVal [duration (s)] = $timeQue
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    ImageComponent item2_img_pr
      image [set every repeat] = $img2
      interpolate = nearest
      size = None
      startVal [condition] = $que_finished == True
      stopVal [duration (s)] = $n_secs_img2
      texture resolution = 512
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    ImageComponent brR_img_pr
      image = right_cr.jpg
      interpolate = nearest
      pos = (0.6, 0)
      size = (0.1, 0.6)
      startVal [condition] = $que_finished == True
      stopVal [duration (s)] = $n_secs_img2
      texture resolution = 512
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    TextComponent response_pr
      letterHeight = 0.1
      opacity = 0
      startVal [condition] = $que_finished == True
      stopVal [condition] = $participant_answered
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    TextComponent timer_pr
      letterHeight = 0.1
      opacity = 0
      saveStartStop = False
      startVal [condition] = $que_finished == True
      stopVal [duration (s)] = 4
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    TextComponent fix_text_pr
      color = $[-1,-1,-1]
      letterHeight = 0.11
      startVal [condition] = $item2_finished == True
      stopVal [duration (s)] = $timeFix
      text = +
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    KeyboardComponent key_prac
      allowedKeys = '1', '2', 'esc'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
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    JoystickComponent joystick_prac
      allowedButtons = 1, 2
      deviceNumber = 0
      forceEndRoutineOnPress = never
      saveJoystickState = final
      startVal [time (s)] = 0.0
      timeRelativeTo = joystick onset
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  Routine ready
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    CodeComponent code_rdy
      Code Type = Py
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      Begin Routine:
        # Change displayed text based on the language previously chosen
        if english == True:
            txt_rdy.text = "There is a total of 4 experimental blocs in the experiment.\n\nThe bloc 1 of the experiment will start soon.\n\nReminder\n\n1: first object bigger / 2: second object bigger\n\n1: same category / 2: different categories\n\nBE READY!"
        else:
            txt_rdy.text = "L'expérience contient un total de 4 blocs.\n\nLe bloc 1 de l'expérience va bientôt commencer.\n\nRappel\n\n1: premier objet plus gros / 2: deuxième objet plus gros\n\n1: même catégorie / 2: différentes catégories\n\nSOYEZ PRÊT !"
    TextComponent txt_rdy
      color = $[-1,-1,-1]
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.1
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    KeyboardComponent key_rdy
      allowedKeys = '5', 'esc'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine thanks
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    CodeComponent code_thx
      Code Type = Py
      Begin Routine:
        # Change displayed text based on the language previously chosen
        if english == True:
            txt_thx.text = "YOU HAVE COMPLETED ALL THE BLOCKS!\n\nJUST RELAX UNTIL THE SCANNER STOPS.\n\nThank you for participating."
        else:
            txt_thx.text = "VOUS AVEZ COMPLÉTÉ TOUS LES BLOCS !\n\nRELAXEZ-VOUS JUSQU'À CE QUE LE SCANNER S'ARRÊTE.\n\nMerci pour votre participation.\n\nAu revoir !"
    TextComponent txt_thx
      color = $[-1,-1,-1]
      durationEstim = 10
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      wrapWidth = 1.1
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  Routine thx
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  Routine cntdown
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    CodeComponent code_ctdown
      Code Type = Py
      Begin Routine:
        # Boolean that will state if the signal is received or not
        signal_received = True
        # List that will contains the time where the signal was received
        signal_times = list()
      Each Frame:
        # Check if we pressed keyboard keys
        keys = event.getKeys()
        #print(keys)

        # Reset signal
        if signal_received and not '5' in keys:
           signal_received = False

        # If we received the signal, store the time
        if not signal_received and '5' in keys:
            #tThisFlipGlobal = win.getFutureFlipTime(clock=None)
            #print(tThisFlipGlobal)
            #signal_times.append(tThisFlipGlobal)
            signal_times.append(t)
            signal_received = True
      End Routine:
        thisExp.addData('signal_ctdown.time', signal_times)

        # Set next trial bloc
        bloc = 1
    TextComponent timer_ctdown
      color = $[-1,-1,-1]
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every frame] = $int(abs(round(5 - t, ndigits = 1)))
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  Routine transition
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    CodeComponent code_transi
      Code Type = Py
      Begin Routine:
        # Change displayed text based on the language previously chosen
        if english == True:
            txt_transi.text = "You have completed the practice."
        else:
            txt_transi.text = "Vous avez fini la pratique."

        # Key 1 or key 2 are not pressed by default
        key1pressed = False
        key2pressed = False
      Each Frame:
        # Check if we pressed keyboard keys
        if "p" in key_transi.keys:
            continueRoutine = False
        elif "t" in key_transi.keys:
            practice.finished = True
            prac_repeat.finished = True
            continueRoutine = False
    TextComponent txt_transi
      color = $[-1,-1,-1]
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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    KeyboardComponent key_transi
      allowedKeys = 'p','t','esc'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine ready_2
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    CodeComponent code_rdy2
      Code Type = Both
      Begin Routine:
        # If we finished the 2nd bloc, skip this routine
        if bloc == 4:
            continueRoutine = False

        # Change displayed text based on the language previously chosen
        if english == True:
            txt_rdy.text = "There is a total of 4 experimental blocks in the experiment.\n\nBlock 1 of the experiment will start soon.\n\nReminder\n\n1: first object bigger / 2: second object bigger\n\n1: same category / 2: different categories\n\nBE READY!"
        else:
            txt_rdy.text = "L'expérience contient un total de 4 blocs.\n\nLe bloc 1 de l'expérience va bientôt commencer.\n\nRappel\n\n1: premier objet plus gros/dans la même catégorie\n2: deuxième objet plus gros/pas dans la même catégorie\n\nSOYEZ PRÊT !"
    TextComponent txt_rdy2
      color = $[-1,-1,-1]
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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    KeyboardComponent key_rdy2
      allowedKeys = '5', 'esc'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine cntdown_2
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    CodeComponent code_ctdown2
      Code Type = Both
      Begin Routine:
        # If we finished the 2nd bloc, skip this routine
        if bloc == 4:
            continueRoutine = False

        # Boolean that will state if the signal is received or not
        signal_received = True
        # List that will contains the time where the signal was received
        signal_times = list()
      Each Frame:
        # Check if we pressed keyboard keys
        keys = event.getKeys()
        #print(keys)

        # Reset signal
        if signal_received and not '5' in keys:
           signal_received = False

        # If we received the signal, store the time
        if not signal_received and '5' in keys:
            signal_times.append(t)
            signal_received = True
      End Routine:
        thisExp.addData('signal_ctdown2.time', signal_times)

        # Set next trial bloc
        bloc = bloc + 1
    TextComponent timer_ctdown2
      color = $[-1,-1,-1]
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every frame] = $int(abs(round(5 - t, ndigits = 1)))
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  Routine trialbloc2
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    CodeComponent code2
      Code Type = Py
  Routine rest
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    CodeComponent code_rest
      Code Type = Py
      Begin Routine:
        # If we finished the 2nd bloc, skip this routine
        if bloc == 4:
            continueRoutine = False

        # Change displayed text based on the language previously chosen
        if english == True:
            txt_rest.text = "THIS RUN IS OVER, JUST RELAX\n\nUNTIL THE SCANNER STOPS"
        else:
            txt_rest.text = "CET BLOC EST TERMINÉ, DÉTENDEZ-VOUS\n\nJUSQU'À CE QUE LE SCANNER S'ARRÊTE"

        # Load bloc 2 csv file
        if bloc == 1:
            trialConditions = "SEMT_conditions_trials_bloc2.csv"
        elif bloc == 2:
            trialConditions = "SEMT_conditions_trials_bloc3.csv"
        else:
           trialConditions = "SEMT_conditions_trials_bloc4.csv"

        #for i in [1,2,3,4]:
        #    trialConditions = "SEMT_conditions_trials_bloc" + str(i) + ".csv"
    TextComponent txt_rest
      color = $[-1,-1,-1]
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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    KeyboardComponent key_rest
      allowedKeys = 't','esc'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine trial
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    CodeComponent code
      Code Type = Both
      Begin Routine:
        # Boolean that will state if the signal is received or not
        signal_received = True

        # List that will contains the time where the signal was received
        signal_times = list()

        # Change displayed text based on the language previously chosen
        if english == True:
            que_text.text = question_english
        else:
            que_text.text = question_french

        # Save the answer of the participant
        # The response period started when image 2 started. No need to save it.
        response_time = -1. # Save when the participant answered (in secs)

        # set the images by parameters of condition file
        img1 = pic1
        img2 = pic2

        # Set the duration of the fixation cross and the question
        timeQue = duration_question/1000 #duration of the question
        timeFix = duration_fixation/1000 #duration of the fixation cross

        # Duration of the items, question and fixation cross with frames
        # The number of frames we want to display is equal to
        # the product of frame-rate and the number of seconds to display
        # the stimulus.
        # n_frames = frame_rate * n_seconds
        # n_frames_img1 = frameRate * 2.
        # n_frames_img2 = frameRate * 2.
        # debug.text = "duration of img 1 in frames: "+str(n_frames_img1)

        n_secs_img1 = 2.
        n_secs_img2 = 2.

        #By default the elements did not start so they are not finished
        item1_finished = False
        que_finished = False
        item2_finished = False

        # Record if the participant answered
        participant_answered = False

        # When true, we reached the end of img2 without any answer
        no_answers = False

        # Reset the response of the participant
        response.text = ""
      Each Frame:
        # Check if we pressed keyboard keys
        keys = event.getKeys()
        #print(keys)

        # Reset signal
        if signal_received and not '5' in keys:
           signal_received = False

        # If we received the signal, store the time
        if not signal_received and '5' in keys:
            signal_times.append(t)
            signal_received = True

        # Set the boolean to true when item1 is done
        if item1_img.status == FINISHED:
            item1_finished = True

        # Set the boolean to true when the question is done
        if que_text.status == FINISHED and not que_finished:
            que_finished = True

        # Register participant's answers
        # Button 1 is pressed
        if not participant_answered and que_finished and (joystick.getAllButtons()[1] or "1" in key.keys):
            response.text = 1
            participant_answered = True
            #win.color = 'grey'
            print("participant chose: ", response.text)

        # Register participant's answers
        # Button 2 is pressed
        elif not participant_answered and que_finished and (joystick.getAllButtons()[2] or "2" in key.keys):
            response.text = 2
            participant_answered = True
            print("participant chose: ", response.text)

        # Register participant's answers
        #4s countdown are done
        elif not no_answers and not participant_answered and timer.status == FINISHED:
            response.finished = True
            no_answers = True
            print("participant did not answer: ", response.text)

        #Set the boolean to true when the item2 is done
        if item2_img.status == FINISHED:
            item2_finished = True

        #Go to next routine when fixation cross is done
        if fix_text.status == FINISHED:
            continueRoutine = False
      End Routine:
        # Save variables for correlation with ePrime previous logfiles

        # Add the answer of the participant
        thisExp.addData('im2.RESP', response.text)
        # Add the correct answer
        thisExp.addData('im2.CRESP', cans)
        # See if that matches with the correct answer
        if response.text == str(cans):
            thisExp.addData('im2.ACC', 1)
        elif response.text == '1' or response.text == '2':
            thisExp.addData('im2.ACC', 0)
        else:
            thisExp.addData('im2.ACC', '')
        if response.tStop!=None:
            thisExp.addData('im2.RT', abs(response.tStop - response.tStart))
        else:
            thisExp.addData('im2.RT', '')

        # Save answer rttime since the beginning of the experiment
        thisExp.addData('im2.RTTime', response.tStopRefresh)

        # Save the time where the participant answered according to the beginning of the countdown
        if response.tStopRefresh!=None:
            thisExp.addData('im2.RTTimeSyncCdown', abs(response.tStopRefresh-timer_ctdown.tStartRefresh))
        else:
            thisExp.addData('im2.RTTimeSyncCdown', '')

        # Save the time where the signal was received
        thisExp.addData('signal.time', signal_times)
    ImageComponent item1_img
      image [set every repeat] = $img1
      interpolate = nearest
      size = None
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $n_secs_img1
      texture resolution = 512
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    ImageComponent brL_img
      image = left_cr.jpg
      interpolate = nearest
      pos = (-0.6, 0)
      size = (0.1, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $n_secs_img1
      texture resolution = 512
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    TextComponent que_text
      color = $[-1,-1,-1]
      letterHeight = 0.06
      startVal [condition] = $item1_finished == True
      stopVal [duration (s)] = $timeQue
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    ImageComponent item2_img
      image [set every repeat] = $img2
      interpolate = nearest
      size = None
      startVal [condition] = que_finished
      stopVal [duration (s)] = n_secs_img2
      texture resolution = 512
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    ImageComponent brR_img
      image = right_cr.jpg
      interpolate = nearest
      pos = (0.6, 0)
      size = (0.1, 0.6)
      startVal [condition] = que_finished
      stopVal [duration (s)] = $n_secs_img2
      texture resolution = 512
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    TextComponent response
      letterHeight = 0.1
      opacity = 0
      startVal [condition] = $que_finished == True
      stopVal [condition] = $participant_answered
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    TextComponent timer
      letterHeight = 0.1
      opacity = 0
      saveStartStop = False
      startVal [condition] = $que_finished == True
      stopVal [duration (s)] = 4
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    TextComponent fix_text
      color = $[-1,-1,-1]
      letterHeight = 0.11
      startVal [condition] = $item2_finished
      stopVal [duration (s)] = $timeFix
      text = +
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    KeyboardComponent key
      allowedKeys = '1', '2', 'esc'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    JoystickComponent joystick
      allowedButtons = 1, 2
      deviceNumber = 0
      forceEndRoutineOnPress = never
      saveJoystickState = final
      startVal [time (s)] = 0.0
      timeRelativeTo = joystick onset
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Flow
  Routine lang
  Routine instr
  LoopInitiator prac_repeat loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 100
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    LoopInitiator practice loopType="TrialHandler"
      conditionsFile = $pracConditions
      loopType = sequential
      nReps = 1
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      Routine prac
    LoopTerminator practice
    Routine transition
  LoopTerminator prac_repeat
  Routine ready
  Routine cntdown
  LoopInitiator trials_repeat loopType="TrialHandler"
    loopType = sequential
    nReps = 4
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $trialConditions
      loopType = sequential
      nReps = 1
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      Routine trial
    LoopTerminator trials
    Routine rest
    Routine ready_2
    Routine cntdown_2
  LoopTerminator trials_repeat
  Routine thanks
